CereStim matrix StimulationConfigurations= { Cathode%20First Number%20of%20pulses Phase%201%20amp%20(uA) Phase%202%20amp%20(uA) Phase%201%20duration%20(us) Phase%202%20duration%20(us) Frequency%20(Hz) Interphase%20duration%20(us) Train%20Frequency%20(Hz) Train%20Duration%20(s) } { Configuration%201 Configuration%202 Configuration%203 Configuration%204 Configuration%205 Configuration%206 Configuration%207 Configuration%208 Configuration%209 Configuration%2010 Configuration%2011 Configuration%2012 Configuration%2013 Configuration%2014 Configuration%2015 Configuration%2016 Configuration%2017 Configuration%2018 } 1 1 1 1 1 1 1 1 1 0 0 0 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1 // Configurations for BLAES PARAM SWEEP
CereStim matrix StimulationTriggers= { Expression Config%20ID Electrode(s) } { Trigger%201 Trigger%202 Trigger%203 Trigger%204 Trigger%205 Trigger%206 Trigger%207 Trigger%208 Trigger%209 Trigger%2010 Trigger%2011 Trigger%2012 Trigger%2013 Trigger%2014 Trigger%2015 Trigger%2016 Trigger%2017 Trigger%2018 Trigger%2019 Trigger%2020 Trigger%2021 Trigger%2022 Trigger%2023 Trigger%2024 Trigger%2025 Trigger%2026 Trigger%2027 Trigger%2028 Trigger%2029 Trigger%2030 Trigger%2031 Trigger%2032 Trigger%2033 Trigger%2034 Trigger%2035 Trigger%2036 } StimulusCode%20==%201 StimulusCode%20==%201 StimulusCode%20==%202 StimulusCode%20==%202 StimulusCode%20==%203 StimulusCode%20==%203 StimulusCode%20==%204 StimulusCode%20==%204 StimulusCode%20==%205 StimulusCode%20==%205 StimulusCode%20==%206 StimulusCode%20==%206 StimulusCode%20==%207 StimulusCode%20==%207 StimulusCode%20==%208 StimulusCode%20==%208 StimulusCode%20==%209 StimulusCode%20==%209 StimulusCode%20==%2010 StimulusCode%20==%2010 StimulusCode%20==%2011 StimulusCode%20==%2011 StimulusCode%20==%2012 StimulusCode%20==%2012 StimulusCode%20==%2013 StimulusCode%20==%2013 StimulusCode%20==%2014 StimulusCode%20==%2014 StimulusCode%20==%2015 StimulusCode%20==%2015 StimulusCode%20==%2016 StimulusCode%20==%2016 StimulusCode%20==%2017 StimulusCode%20==%2017 StimulusCode%20==%2018 StimulusCode%20==%2018 1 10 1 10 2 11 2 11 3 12 3 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4 // Trigger Library for BLAES PARAM SWEEP
