CereStim matrix StimulationConfigurations= { Cathode%20First Number%20of%20pulses Phase%201%20amp%20(uA) Phase%202%20amp%20(uA) Phase%201%20duration%20(us) Phase%202%20duration%20(us) Frequency%20(Hz) Interphase%20duration%20(us) Train%20Duration%20(s) Train%20Frequency%20(Hz) } { Configuration%201 Configuration%202 Configuration%203 Configuration%204 Configuration%205 Configuration%206 Configuration%207 Configuration%208 Configuration%209 Configuration%2010 Configuration%2011 Configuration%2012 Configuration%2013 Configuration%2014 Configuration%2015 Configuration%2016 Configuration%2017 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8 8 0 0 // Configurations for BLAES PARAM SWEEP
Application matrix Stimuli= { caption icon av EarlyOffsetExpression StimulusDuration } { Start%20Screen Begin%20Video stim%20config%201 stim%20config%202 stim%20config%203 stim%20config%204 stim%20config%205 stim%20config%206 stim%20config%207 stim%20config%208 stim%20config%209 stim%20config%2010 stim%20config%2011 stim%20config%2012 stim%20config%2013 stim%20config%2014 stim%20config%2015 stim%20config%2016 stim%20config%2017 stim%20config%2018 stim%20config%2019 stim%20config%2020 stim%20config%2021 stim%20config%2022 stim%20config%2023 stim%20config%2024 Block%20Pause CCEP CCEP CCEP%20Pause End%20Run Jitter%2032 Jitter%2033 Jitter%2034 Jitter%2035 Jitter%2036 Jitter%2037 Jitter%2038 Jitter%2039 Jitter%2040 Jitter%2041 Jitter%2042 Jitter%2043 Jitter%2044 Jitter%2045 Jitter%2046 Jitter%2047 Jitter%2048 Jitter%2049 Jitter%2050 Jitter%2051 Jitter%2052 Jitter%2053 Jitter%2054 Jitter%2055 Jitter%2056 Jitter%2057 Jitter%2058 Jitter%2059 Jitter%2060 Jitter%2061 Jitter%2062 Jitter%2063 Jitter%2064 Jitter%2065 Jitter%2066 Jitter%2067 Jitter%2068 Jitter%2069 Jitter%2070 Jitter%2071 Jitter%2072 Jitter%2073 Jitter%2074 Jitter%2075 Jitter%2076 Jitter%2077 Jitter%2078 Jitter%2079 Jitter%2080 Jitter%2081 Jitter%2082 Jitter%2083 Jitter%2084 Jitter%2085 Jitter%2086 Jitter%2087 Jitter%2088 Jitter%2089 Jitter%2090 Jitter%2091 Jitter%2092 Jitter%2093 Jitter%2094 Jitter%2095 Jitter%2096 Jitter%2097 Jitter%2098 Jitter%2099 Jitter%20100 Jitter%20101 Jitter%20102 Jitter%20103 Jitter%20104 Jitter%20105 Jitter%20106 Jitter%20107 Jitter%20108 Jitter%20109 Jitter%20110 Jitter%20111 Jitter%20112 Jitter%20113 Jitter%20114 Jitter%20115 Jitter%20116 Jitter%20117 Jitter%20118 Jitter%20119 Jitter%20120 Jitter%20121 Jitter%20122 Jitter%20123 Jitter%20124 Jitter%20125 Jitter%20126 Jitter%20127 Jitter%20128 Jitter%20129 Jitter%20130 Jitter%20131 Jitter%20132 Jitter%20133 Jitter%20134 Jitter%20135 Jitter%20136 Jitter%20137 Jitter%20138 Jitter%20139 Jitter%20140 Jitter%20141 Jitter%20142 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2.030000e+00s 2.250000e+00s 3.370000e+00s 2.780000e+00s // captions and icons to be displayed, sounds to be played for different stimuli
Application intlist Sequence= 3027 1 2 28 30 21 28 32 29 30 20 29 33 28 30 23 28 34 29 30 16 29 35 28 30 9 28 36 29 30 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10 29 631 31 
Application int SequenceType= 0 // Sequence of stimuli is 0 deterministic, 1 random, 2 P3Speller compatible (enumeration)
CereStim matrix StimulationTriggers= { Expression Config%20ID Electrode(s) } { Trigger%201 Trigger%202 Trigger%203 Trigger%204 Trigger%205 Trigger%206 Trigger%207 Trigger%208 Trigger%209 Trigger%2010 Trigger%2011 Trigger%2012 Trigger%2013 Trigger%2014 Trigger%2015 Trigger%2016 Trigger%2017 Trigger%2018 Trigger%2019 Trigger%2020 Trigger%2021 Trigger%2022 Trigger%2023 Trigger%2024 Trigger%2025 Trigger%2026 Trigger%2027 Trigger%2028 Trigger%2029 Trigger%2030 Trigger%2031 Trigger%2032 Trigger%2033 Trigger%2034 Trigger%2035 Trigger%2036 Trigger%2037 Trigger%2038 Trigger%2039 Trigger%2040 Trigger%2041 Trigger%2042 Trigger%2043 Trigger%2044 Trigger%2045 Trigger%2046 Trigger%2047 Trigger%2048 CCEP%201%20Cathode CCEP%201%20Anode CCEP%202%20Cathode CCEP%202%20Anode } StimulusCode%20==%203 StimulusCode%20==%203 StimulusCode%20==%204 StimulusCode%20==%204 StimulusCode%20==%205 StimulusCode%20==%205 StimulusCode%20==%206 StimulusCode%20==%206 StimulusCode%20==%207 StimulusCode%20==%207 StimulusCode%20==%208 StimulusCode%20==%208 StimulusCode%20==%209 StimulusCode%20==%209 StimulusCode%20==%2010 StimulusCode%20==%2010 StimulusCode%20==%2011 StimulusCode%20==%2011 StimulusCode%20==%2012 StimulusCode%20==%2012 StimulusCode%20==%2013 StimulusCode%20==%2013 StimulusCode%20==%2014 StimulusCode%20==%2014 StimulusCode%20==%2015 StimulusCode%20==%2015 StimulusCode%20==%2016 StimulusCode%20==%2016 StimulusCode%20==%2017 StimulusCode%20==%2017 StimulusCode%20==%2018 StimulusCode%20==%2018 StimulusCode%20==%2019 StimulusCode%20==%2019 StimulusCode%20==%2020 StimulusCode%20==%2020 StimulusCode%20==%2021 StimulusCode%20==%2021 StimulusCode%20==%2022 StimulusCode%20==%2022 StimulusCode%20==%2023 StimulusCode%20==%2023 StimulusCode%20==%2024 StimulusCode%20==%2024 StimulusCode%20==%2025 StimulusCode%20==%2025 StimulusCode%20==%2026 StimulusCode%20==%2026 StimulusCode%20==%2028 StimulusCode%20==%2028 StimulusCode%20==%2029 StimulusCode%20==%2029 1 13 1 13 2 14 2 14 3 15 3 15 4 16 4 16 5 17 5 17 6 18 6 18 7 19 7 19 8 20 8 20 9 21 9 21 10 22 10 22 11 23 11 23 12 24 12 24 25 26 25 26 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 1 2 3 4 // Trigger Library for BLAES PARAM SWEEP
CereStim int DynamicConfiguration= 1 0 0 1 
